PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  color = $[1,1,1]
  Experiment info = {u'age': u'', u'session': u'21', u'participant': u'', u'name': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Save log file = False
  Save wide csv file = False
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  expName = Dense-opposite-tail
  Screen = 1
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Routines
  Routine trials
    ImageComponent imageToCat
      stopVal [duration (s)] = 10.0
      units = pix
      startVal [time (s)] = 0
      image [set every repeat] = $categMember
      size = [1000, 1000]
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    KeyboardComponent answerForImage
      correctAns = $corrRespIm
      storeCorrect = True
      stopVal [duration (s)] = 10.0
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0
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  Routine instruction
    TextComponent Instr
      color = black
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 22
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      text:
        Прочтите внимательно инструкцию!

        Сейчас на экране вам будут предъявляться изображения искусственных существ. Вам необходимо отнести каждое изображение к одной из двух категорий. Если вы считаете, что изображение принадлежит к категории А, нажмите на кнопку Налево. Если вы считаете, что изображение принадлежит к категории Б, нажмите на кнопку Направо.
        После ответа изображение пропадет с экрана и вам будет представлено слово, напечатанное заглавными или строчными буквами. Заглавные буквы означают, что вы выбрали правильную категорию для данного изображения. Строчные буквы  означают, что вы выбрали неправильную категорию. Каждое изображение принадлежит либо к категории А, либо к категории Б.
        Во время выполнения задания старайтесь распределить как можно больше изображений в правильные категории.

        Если у вас есть вопросы, задайте их экспериментатору прямо сейчас. Для начала эксперимента нажмите клавишу ПРОБЕЛ
    KeyboardComponent toStart
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine feedback1
    CodeComponent codeForFB
      Begin Experiment:
        Msg=''
      Begin Routine:
        random2 = randint(1,13)

        if random2==1:
            if answerForImage.corr==0:
                Msg=u"дружба"
            else:
                Msg=u"ТОСКА"
        if random2==2:
            if answerForImage.corr==0:
                Msg=u"веселье"
            else:
                Msg=u"ОБИДА"
        if random2==3:
            if answerForImage.corr==0:
                Msg=u"восторг"
            else:
                Msg=u"РАЗЛУКА"
        if random2==4:
            if answerForImage.corr==0:
                Msg=u"отдых"
            else:
                Msg=u"ГРУСТЬ"
        if random2==5:
            if answerForImage.corr==0:
                Msg=u"весна"
            else:
                Msg=u"АВАРИЯ"
        if random2==6:
            if answerForImage.corr==0:
                Msg=u"ласка"
            else:
                Msg=u"БОЛЬНИЦА"
        if random2==7:
            if answerForImage.corr==0:
                Msg=u"доброта"
            else:
                Msg=u"ПОТЕРЯ"
        if random2==8:
            if answerForImage.corr==0:
                Msg=u"букет"
            else:
                Msg=u"ПЕЧАЛЬ"
        if random2==9:
            if answerForImage.corr==0:
                Msg=u"сладость"
            else:
                Msg=u"МУЧЕНИЕ"
        if random2==10:
            if answerForImage.corr==0:
                Msg=u"счастье"
            else:
                Msg=u"ПОЗОР"
        if random2==11:
            if answerForImage.corr==0:
                Msg=u"тепло"
            else:
                Msg=u"СКУКА"
        if random2==12:
            if answerForImage.corr==0:
                Msg=u"красота"
            else:
                Msg=u"ИЗМЕНА"
        if random2==13:
            if answerForImage.corr==0:
                Msg=u"блеск"
            else:
                Msg=u"ОБМАН"
    TextComponent FBforIm
      color = black
      text [set every repeat] = $Msg
      stopVal [duration (s)] = 1.5
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 60.0
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Flow
  Routine instruction
  LoopInitiator trialsLoop loopType="TrialHandler"
    conditionsFile = conditions.xls
    loopType = random
    nReps = 10
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    conditions:
      [{u'categMember': u'den_a1.bmp'},
      {u'categMember': u'den_a2.bmp'},
      {u'categMember': u'den_a3.bmp'},
      {u'categMember': u'den_a4.bmp'},
      {u'categMember': u'den_a5.bmp'},
      {u'categMember': u'den_b1.bmp'},
      {u'categMember': u'den_b2.bmp'},
      {u'categMember': u'den_b3.bmp'},
      {u'categMember': u'den_b4.bmp'},
      {u'categMember': u'den_b5.bmp'}]
    Routine trials
    Routine feedback1
  LoopTerminator trialsLoop
