PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  color = $[1,1,1]
  Experiment info = {u'age': u'', u'session': u'22', u'participant': u'', u'name': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Save log file = False
  Save wide csv file = False
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  expName = Dense-direct
  Screen = 1
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Routines
  Routine trials
    ImageComponent imageToCat
      stopVal [duration (s)] = 10.0
      units = pix
      startVal [time (s)] = 0
      image [set every repeat] = $categMember
      size = [1000, 1000]
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    KeyboardComponent answerForImage
      correctAns = $corrRespIm
      storeCorrect = True
      stopVal [duration (s)] = 10.0
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0
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  Routine instruction
    TextComponent Instr
      color = black
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 22
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      text:
        Прочтите внимательно инструкцию!

        Сейчас на экране вам будут предъявляться изображения искусственных существ. Вам необходимо отнести каждое изображение к одной из двух категорий. Если вы считаете, что изображение принадлежит к категории А, нажмите на кнопку Налево. Если вы считаете, что изображение принадлежит к категории Б, нажмите на кнопку Направо. Каждое изображение принадлежит либо к категории А, либо к категории Б.
        В данном задании не будет обратной связи. Во время выполнения задания старайтесь распределить как можно больше изображений в правильные категории, основываясь на вашем опыте из предыдущего задания.

        Если у вас есть вопросы, задайте их экспериментатору прямо сейчас. Для начала эксперимента нажмите клавишу ПРОБЕЛ
    KeyboardComponent toStart
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine feedback1
    CodeComponent codeForFB
    TextComponent FBforIm
      color = black
      stopVal [duration (s)] = 1
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 60.0
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Flow
  Routine instruction
  LoopInitiator trialsLoop loopType="TrialHandler"
    conditionsFile = conditions.xls
    loopType = random
    nReps = 2
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    conditions:
      [{u'categMember': u'den_a1.bmp'},
      {u'categMember': u'den_a2.bmp'},
      {u'categMember': u'den_a3.bmp'},
      {u'categMember': u'den_a4.bmp'},
      {u'categMember': u'den_a5.bmp'},
      {u'categMember': u'den_b1.bmp'},
      {u'categMember': u'den_b2.bmp'},
      {u'categMember': u'den_b3.bmp'},
      {u'categMember': u'den_b4.bmp'},
      {u'categMember': u'den_b5.bmp'}]
    Routine trials
    Routine feedback1
  LoopTerminator trialsLoop
